PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'"001"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Lexixal_Decision_Task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $TOP_STRING
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0,-0,2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $BOTTOM_STRING
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Introduction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        You will see TWO letter strings at a time (e.g., BREAD BUTTER).

        Press Y if BOTH are real, related English words.
        Press N if not (if one or both are not real words)
        Please respond as quickly and accurately as possible.
        Press SPACE to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      correctAns = $CORRECT_RESPONSE
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Thankyou
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thankyou For Participating
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Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cds_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TOP_STRING', 'DOCTOR'), ('BOTTOM_STRING', 'NURSE'), ('corr_resp', 'y'), ('WORD_STATUS', 'Word-Word')]),
      OrderedDict([('TOP_STRING', 'BREAD'), ('BOTTOM_STRING', 'BUTTER'), ('corr_resp', 'y'), ('WORD_STATUS', 'Word-Word')]),
      OrderedDict([('TOP_STRING', 'LION'), ('BOTTOM_STRING', 'TIGER'), ('corr_resp', 'y'), ('WORD_STATUS', 'Word-Word')]),
      OrderedDict([('TOP_STRING', 'BLACK'), ('BOTTOM_STRING', 'WHITE'), ('corr_resp', 'y'), ('WORD_STATUS', 'Word-Word')]),
      OrderedDict([('TOP_STRING', 'HAND'), ('BOTTOM_STRING', 'FOOT'), ('corr_resp', 'y'), ('WORD_STATUS', 'Word-Word')]),
      OrderedDict([('TOP_STRING', 'WINDOW'), ('BOTTOM_STRING', 'DOOR'), ('corr_resp', 'y'), ('WORD_STATUS', 'Word-Word')]),
      OrderedDict([('TOP_STRING', 'COFFEE'), ('BOTTOM_STRING', 'TEA'), ('corr_resp', 'y'), ('WORD_STATUS', 'Word-Word')]),
      OrderedDict([('TOP_STRING', 'CAT'), ('BOTTOM_STRING', 'DOG'), ('corr_resp', 'y'), ('WORD_STATUS', 'Word-Word')]),
      OrderedDict([('TOP_STRING', 'CHAIR'), ('BOTTOM_STRING', 'TABLE'), ('corr_resp', 'y'), ('WORD_STATUS', 'Word-Word')]),
      OrderedDict([('TOP_STRING', 'OCEAN'), ('BOTTOM_STRING', 'BEACH'), ('corr_resp', 'y'), ('WORD_STATUS', 'Word-Word')]),
      OrderedDict([('TOP_STRING', 'SUN'), ('BOTTOM_STRING', 'MOON'), ('corr_resp', 'y'), ('WORD_STATUS', 'Word-Word')]),
      OrderedDict([('TOP_STRING', 'KNIFE'), ('BOTTOM_STRING', 'FORK'), ('corr_resp', 'y'), ('WORD_STATUS', 'Word-Word')]),
      OrderedDict([('TOP_STRING', 'SICK'), ('BOTTOM_STRING', 'ILL'), ('corr_resp', 'y'), ('WORD_STATUS', 'Word-Word')])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
    Routine trial
  LoopTerminator trials
  Routine Thankyou
