PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '"001"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Stroop_Task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = circle
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent cc
      color [set every repeat] = $colour
      letterHeight = 50
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $cor_res
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Intro
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        welcome

        press r when you see red font colour
        and press b when you see blue font colour

        press space to start the experiment
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thankyou
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thankyou for participating
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stroop_practice.xlsx
    loopType = random
    nReps = 25
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'coungrency': 'C', 'cor_res': 'r'},
      {'word': 'BLUE', 'colour': 'blue', 'coungrency': 'C', 'cor_res': 'b'},
      {'word': 'BLUE', 'colour': 'red', 'coungrency': 'I', 'cor_res': 'r'},
      {'word': 'RED', 'colour': 'blue', 'coungrency': 'I', 'cor_res': 'b'}]
    Routine trial
  LoopTerminator trials
  Routine thankyou
