PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'"001"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Visual_Seaech
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
            no_Distractor = 10
            thisExp.addData('no_Distractor', no_Distractor)
        else:
            no_Distractor = 5
            thisExp.addData('no_Distractor', no_Distractor)


        Distractors = []
        for i in range(no_Distractor):
            Distractor = visual.TextStim(
                win=win,
                name='Distractor',
                text='L',
                font='Arial',
                pos=(random() - 0.5, random() - 0.5),  # random position
                height=0.05,
                ori=randint(1, 360),                   # random orientation
                color='white',
                colorSpace='rgb',
                languageStyle='LTR',
                depth=-2.0
            )
            Distractors.append(Distractor)


        for Distractor in Distractors:
            Distractor.setAutoDraw(True)

            win.mouseVisible = True
      End Routine:
        for Distractor in Distractors:
            Distractor.setAutoDraw(False)

            win.mouseVisible = False
    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent Target
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = T
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    MouseComponent mouse
      clickable = $Target
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine trial
  LoopTerminator trials
