PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '"001"'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (900, 800)
  expName = Word_Priming
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar" 
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Study_Word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 't shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Test.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test', 'l_pt_p'), ('words', 'laptop'), ('old_new', 'old')]),
      OrderedDict([('test', '_ha_t'), ('words', 'chart'), ('old_new', 'old')]),
      OrderedDict([('test', 't_hi_t'), ('words', 'tshirt'), ('old_new', 'old')]),
      OrderedDict([('test', '_o_se'), ('words', 'mouse'), ('old_new', 'old')]),
      OrderedDict([('test', 'P_st_y'), ('words', 'pastry'), ('old_new', 'old')]),
      OrderedDict([('test', 'c_s_'), ('words', 'case'), ('old_new', 'old')]),
      OrderedDict([('test', 'c_u_s_'), ('words', 'cruise'), ('old_new', 'old')]),
      OrderedDict([('test', 'p_li_e'), ('words', 'police'), ('old_new', 'old')]),
      OrderedDict([('test', 'k_y_'), ('words', 'keys'), ('old_new', 'old')]),
      OrderedDict([('test', 'p_ste_'), ('words', 'poster'), ('old_new', 'old')]),
      OrderedDict([('test', '_o_rd'), ('words', 'board'), ('old_new', 'old')]),
      OrderedDict([('test', '_a_b_e'), ('words', 'marble'), ('old_new', 'old')]),
      OrderedDict([('test', 'p_o_e'), ('words', 'phone'), ('old_new', 'old')]),
      OrderedDict([('test', 'c_s_i_n'), ('words', 'cushion'), ('old_new', 'old')]),
      OrderedDict([('test', 't_bl_'), ('words', 'table'), ('old_new', 'new')]),
      OrderedDict([('test', 'b_o_'), ('words', 'book'), ('old_new', 'new')]),
      OrderedDict([('test', 'p_nc_l'), ('words', 'pencil'), ('old_new', 'new')]),
      OrderedDict([('test', 'v_s_'), ('words', 'vase'), ('old_new', 'new')]),
      OrderedDict([('test', 'b_t_l_'), ('words', 'bottle'), ('old_new', 'new')]),
      OrderedDict([('test', 'c_me_a'), ('words', 'camera'), ('old_new', 'new')])]
    Routine Test
  LoopTerminator trials_2
